CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:24
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Row>[A-H]*) - (?P<Column>[0-9]*)\\\\(fld (?P<Site>[0-9]*) wv (?P<Wavelength>.*) - (?P<Filter>.*)\\\\)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Select the rule criteria:and (file does contain "DAPI")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "FITC")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "TexasRed")
    Name to assign these images:Olig2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "Cy5")
    Name to assign these images:Tubulin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:Tubulin
    Include the image rescaling value?:No
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:15
    Calculate saturation metrics?:No
    Calculate intensity metrics?:No
    Calculate thresholds?:Yes
    Use all thresholding methods?:No
    Select a thresholding method:Otsu
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):7,25
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:Nuc_expansion
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DNA
    Number of pixels by which to expand the primary objects:12
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    Retain outlines of the identified secondary objects?:No
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Nuc_expansion
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Collar
    Name the outline image:Collar_Outlines
    Retain outlines of the tertiary objects?:Yes
    Shrink smaller object prior to subtraction?:No

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:Tubulin
    Name the primary objects to be identified:Cell_network
    Typical diameter of objects, in pixel units (Min,Max):3,6
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Laplacian of Gaussian
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
    Automatically calculate the threshold using the Otsu method?:Yes
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    Automatically calculate the size of objects for the Laplacian of Gaussian filter?:No
    Enter LoG filter diameter:10
    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Global
    Thresholding method:RidlerCalvard
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
MeasureObjectSizeShape:[module_num:10|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
    Select objects to measure:Cell_network
    Calculate the Zernike features?:No

FilterObjects:[module_num:11|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
    Name the output objects:Filtered_Cell_network
    Select the object to filter:Cell_network
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Retain outlines of the identified objects?:Yes
    Name the outline image:Filtered_Protrusions
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    Measurement count:1
    Additional object count:0
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:10
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:12|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
    Select objects to be masked:Filtered_Cell_network
    Name the masked objects:Collar_mask
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Collar
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MaskObjects:[module_num:13|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
    Select objects to be masked:Collar
    Name the masked objects:Protrusions_in_Collar
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Collar_mask
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Retain
    Retain outlines of the resulting objects?:No
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    Invert the mask?:No

MeasureObjectSizeShape:[module_num:14|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
    Select objects to measure:Collar
    Select objects to measure:Protrusions_in_Collar
    Select objects to measure:Nuclei
    Calculate the Zernike features?:No

MeasureObjectIntensity:[module_num:15|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
    Hidden:2
    Select an image to measure:Olig2
    Select an image to measure:GFP
    Select objects to measure:Nuclei

RelateObjects:[module_num:16|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
    Select the input child objects:Collar
    Select the input parent objects:Protrusions_in_Collar
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Tubulin
    Name the output image:Final_Overlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:Collar_mask
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    Select outline color:blue
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei
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    Select outline color:yellow
    Load outlines from an image or objects?:Objects
    Select objects to display:Collar

DisplayDataOnImage:[module_num:18|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
    Display object or image measurements?:Object
    Select the input objects:Collar
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:Tubulin
    Text color:red
    Name the output image that has the measurements displayed:Collar_nr
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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
SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:Final_Overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Tubulin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Final_Overlay
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:Collar_nr
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Tubulin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Collar_nr
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:Filtered_Protrusions
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Tubulin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:tubulin
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:Collar_Outlines
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Tubulin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:collar
    Saved file format:tif
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    :Image|Count_Cell_network,Image|Count_Filtered_Cell_network,Image|Count_Protrusions_in_Collar,Image|Count_Nuclei,Image|Count_Nuc_expansion,Experiment|Modification_Timestamp,Experiment|Pipeline_Pipeline,Experiment|Run_Timestamp,Experiment|CellProfiler_Version,Protrusions_in_Collar|Parent_Collar,Protrusions_in_Collar|Number_Object_Number,Protrusions_in_Collar|AreaShape_Area,Protrusions_in_Collar|Children_Collar_Count,Nuclei|Number_Object_Number,Nuclei|Intensity_MeanIntensity_GFP,Nuclei|Intensity_MeanIntensity_Olig2,Nuclei|AreaShape_FormFactor,Nuclei|AreaShape_Area,Nuclei|AreaShape_Eccentricity,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
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No

ExportToDatabase:[module_num:24|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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:Yes
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    Name the SQLite database file:DefaultDB.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Select the plate type:None
    Select the plate metadata:FileLocation
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:1
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:MyExpt
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the classifier tool:
    Export object relationships?:Yes
    Overwrite without warning?:Never
    Access CPA images via URL?:No
    Select the classification type:Object
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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